OpenViBE-Scenario
0xf36a1567 = http://openvibe.inria.fr/openvibe-p300-speller/
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  The use of these P300 examples are described in

  http://openvibe.inria.fr/openvibe-p300-speller/

  with important notes about timing in

  http://openvibe.inria.fr/using-the-p300-scenarios-inside-openvibe/
Comment
  Note that by default this scenario reads from a file
  included in the OpenViBE distribution. To use live signal
  from a headset, replace the connections from
  Generic Stream Reader to connections from
  Acquisition Client.
Comment
  This box will write the recorded file under
  the directory where the scenario was opened
  from (token ${Player_ScenarioDirectory})

Python UI => #0
  Clock frequency (Hz) = 16
  Script = ${Player_ScenarioDirectory}/bciui_script_1_acquisition.py
  Message = Hello World!
#0.Controller -> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop
0xc67a01dc Generic stream reader => #2
  Filename = C:/Users/Jun Shern/Scripts/BCI/BCI/User Interface/signals/javi_success/EEG-Javi-Online.ov
Input stream 1=#2.Output stream 2, Input stream 2=#0.Flash, Input stream 3=#0.Target -> Identity => #3
#3.Output stream 1 -> Channel Selector "Cz;O1;O2"
  Channel List = Cz;O1;O2
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 20.000000
  Pass band ripple (dB) = 0.500000
-> Signal Decimation => #6
  Decimation factor = 4
Input stream 1=#6, Input stream 2=#3.Output stream 2 -> Identity => #7
Data=#7.Output stream 1, Stimulations=#7.Output stream 2 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
Input stream 1=#2.Output stream 1, Input stream 2=#2.Output stream 2, Input stream 3=#0.Flash, Input stream 4=#0.Target -> Identity => #9
Input stream 1=#9.Output stream 1, Input stream 2=#9.Output stream 2, Input stream 3=#9.Output stream 3, Input stream 4=#9.Output stream 4 -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/signals/record-[$core{date}-$core{time}].ov
  Use compression = false
