OpenViBE-Scenario
0xf36a1567 = http://openvibe.inria.fr/openvibe-p300-speller/
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  Note that by default this scenario reads from a file
  included in the OpenViBE distribution. To use
  real data, change Generic Stream Reader to
  read from the file recorded in the previous scenario,
  or switch from file reader to the acquisition client.
Comment
  Switch from file reader
  to Acquisiton client to use it online

Generic stream reader => #0
  Filename = C:/Users/nekuss3/Desktop/Nueva carpeta/EEG-Javi-Online.ov
Generic stream reader => #1
  Filename = C:/Users/nekuss3/Desktop/Nueva carpeta/signals/bci-p300-speller.ov
Input stream 1=#0.Output stream 2, Input stream 2=#1.Output stream 3, Input stream 3=#1.Output stream 4 -> Identity => #2
#2.Output stream 1 -> Channel Selector "O1;O2;P7;P8;F3;F4;FC5;FC6;AF3; AF4; F7;F8"
  Channel List = O1;O2;P7;P8;F3;F4;FC5;FC6;AF3; AF4; F7;F8
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 20.000000
  Pass band ripple (dB) = 0.500000
-> Signal Decimation
  Decimation factor = 4
-> xDAWN Spatial Filter => #6
  Spatial Filter Coefficients = -4.192811e-001 7.454757e-003 -3.018151e-001 -9.793504e-002 4.021952e-001 2.891119e-001 -4.700483e-001 1.217886e-001 3.317560e-002 1.373854e-001 4.241580e-001 2.060443e-001 -4.073798e-001 -2.800870e-003 1.315449e-001 3.240172e-002 -6.283996e-001 -1.976131e-001 3.487842e-001 -8.699318e-002 -1.078551e-001 1.686907e-001 -6.885163e-002 4.557356e-001 1.962484e-001 9.969176e-003 7.869604e-002 7.316900e-002 -3.792320e-001 3.724776e-001 -6.192647e-002 -1.827146e-001 -1.362792e-001 6.104444e-001 -4.755118e-001 1.128652e-001
  Number of Output Channels = 3
  Number of Input Channels = 12
  Filter matrix file =
  0x8d21ff41 = C:/Users/nekuss3/Desktop/Nueva carpeta/Javi-Spatial-Filter-Config-v2.cfg
Input stream 1=#6, Input stream 2=#2.Output stream 2 -> Identity => #7
Input stream 1=#7.Output stream 1, Input stream 2=#7.Output stream 2 -> Identity => #8
Input signal=#8.Output stream 1, Input stimulations=#8.Output stream 2 -> Stimulation based epoching => #9
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_07
#9.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = C:/Users/nekuss3/Desktop/Nueva carpeta/bci-examples/p300-speller/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #12
  Filename to load configuration from = C:/Users/nekuss3/Desktop/Nueva carpeta/Javi-Classifier-v2.xml
Input signal=#8.Output stream 1, Input stimulations=#8.Output stream 2 -> Stimulation based epoching => #13
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_08
#13.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = C:/Users/nekuss3/Desktop/Nueva carpeta/bci-examples/p300-speller/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #16
  Filename to load configuration from = C:/Users/nekuss3/Desktop/Nueva carpeta/Javi-Classifier-v2.xml
Input signal=#8.Output stream 1, Input stimulations=#8.Output stream 2 -> Stimulation based epoching => #17
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_09
#17.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = C:/Users/nekuss3/Desktop/Nueva carpeta/bci-examples/p300-speller/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #20
  Filename to load configuration from = C:/Users/nekuss3/Desktop/Nueva carpeta/Javi-Classifier-v2.xml
Input signal=#8.Output stream 1, Input stimulations=#8.Output stream 2 -> Stimulation based epoching => #21
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_0A
#21.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = C:/Users/nekuss3/Desktop/Nueva carpeta/bci-examples/p300-speller/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #24
  Filename to load configuration from = C:/Users/nekuss3/Desktop/Nueva carpeta/Javi-Classifier-v2.xml
Input signal=#8.Output stream 1, Input stimulations=#8.Output stream 2 -> Stimulation based epoching => #25
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_0B
#25.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = C:/Users/nekuss3/Desktop/Nueva carpeta/bci-examples/p300-speller/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #28
  Filename to load configuration from = C:/Users/nekuss3/Desktop/Nueva carpeta/Javi-Classifier-v2.xml
Input signal=#8.Output stream 1, Input stimulations=#8.Output stream 2 -> Stimulation based epoching => #29
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_0C
#29.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = C:/Users/nekuss3/Desktop/Nueva carpeta/bci-examples/p300-speller/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #32
  Filename to load configuration from = C:/Users/nekuss3/Desktop/Nueva carpeta/Javi-Classifier-v2.xml
Input stream 1=#12.Hyperplane distance, Input stream 2=#16.Hyperplane distance, Input stream 3=#20.Hyperplane distance, Input stream 4=#24.Hyperplane distance, Input stream 5=#28.Hyperplane distance, Input stream 6=#32.Hyperplane distance -> Identity => #33
Classification result 0=#33.Output stream 1, Classification result 1=#33.Output stream 2, Classification result 2=#33.Output stream 3, Classification result 3=#33.Output stream 4, Classification result 4=#33.Output stream 5, Classification result 5=#33.Output stream 6 -> Voting Classifier => #34
  Number of repetitions = 12
  Target class label = OVTK_StimulationId_Target
  Non target class label = OVTK_StimulationId_NonTarget
  Reject class label = OVTK_StimulationId_Label_00
  Result class label base = OVTK_StimulationId_Label_07
  Choose one if ex-aequo = true
Input stream 1=#7.Output stream 1, Input stream 2=#7.Output stream 2 -> Identity => #35
Input signal=#35.Output stream 1, Input stimulations=#35.Output stream 2 -> Stimulation based epoching => #36
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_01
#36.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = C:/Users/nekuss3/Desktop/Nueva carpeta/bci-examples/p300-speller/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #39
  Filename to load configuration from = C:/Users/nekuss3/Desktop/Nueva carpeta/Javi-Classifier-v2.xml
Input signal=#35.Output stream 1, Input stimulations=#35.Output stream 2 -> Stimulation based epoching => #40
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_02
#40.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = C:/Users/nekuss3/Desktop/Nueva carpeta/bci-examples/p300-speller/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #43
  Filename to load configuration from = C:/Users/nekuss3/Desktop/Nueva carpeta/Javi-Classifier-v2.xml
Input signal=#35.Output stream 1, Input stimulations=#35.Output stream 2 -> Stimulation based epoching => #44
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_03
#44.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = C:/Users/nekuss3/Desktop/Nueva carpeta/bci-examples/p300-speller/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #47
  Filename to load configuration from = C:/Users/nekuss3/Desktop/Nueva carpeta/Javi-Classifier-v2.xml
Input signal=#35.Output stream 1, Input stimulations=#35.Output stream 2 -> Stimulation based epoching => #48
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_04
#48.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = C:/Users/nekuss3/Desktop/Nueva carpeta/bci-examples/p300-speller/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #51
  Filename to load configuration from = C:/Users/nekuss3/Desktop/Nueva carpeta/Javi-Classifier-v2.xml
Input signal=#35.Output stream 1, Input stimulations=#35.Output stream 2 -> Stimulation based epoching => #52
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_05
#52.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = C:/Users/nekuss3/Desktop/Nueva carpeta/bci-examples/p300-speller/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #55
  Filename to load configuration from = C:/Users/nekuss3/Desktop/Nueva carpeta/Javi-Classifier-v2.xml
Input signal=#35.Output stream 1, Input stimulations=#35.Output stream 2 -> Stimulation based epoching => #56
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_06
#56.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = C:/Users/nekuss3/Desktop/Nueva carpeta/bci-examples/p300-speller/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #59
  Filename to load configuration from = C:/Users/nekuss3/Desktop/Nueva carpeta/Javi-Classifier-v2.xml
Input stream 1=#39.Hyperplane distance, Input stream 2=#43.Hyperplane distance, Input stream 3=#47.Hyperplane distance, Input stream 4=#51.Hyperplane distance, Input stream 5=#55.Hyperplane distance, Input stream 6=#59.Hyperplane distance -> Identity => #60
Classification result 0=#60.Output stream 1, Classification result 1=#60.Output stream 2, Classification result 2=#60.Output stream 3, Classification result 3=#60.Output stream 4, Classification result 4=#60.Output stream 5, Classification result 5=#60.Output stream 6 -> Voting Classifier => #61
  Number of repetitions = 12
  Target class label = OVTK_StimulationId_Target
  Non target class label = OVTK_StimulationId_NonTarget
  Reject class label = OVTK_StimulationId_Label_00
  Result class label base = OVTK_StimulationId_Label_01
  Choose one if ex-aequo = true
Sequence stimulations=#2.Output stream 2, Target stimulations=#2.Output stream 3, Row selection stimulations=#61, Column selection stimulations=#34 -> P300 Speller Visualisation
  Interface filename = C:/Users/nekuss3/Desktop/Nueva carpeta/plugins/simple-visualisation/p300-speller.ui
  Row stimulation base = OVTK_StimulationId_Label_01
  Column stimulation base = OVTK_StimulationId_Label_07
  Flash background color = 5,5,5
  Flash foreground color = 100,100,100
  Flash font size = 60
  No flash background color = 0,0,0
  No flash foreground color = 25,25,25
  No flash font size = 40
  Target background color = 10,40,10
  Target foreground color = 60,100,60
  Target font size = 40
  Selected background color = 70,20,20
  Selected foreground color = 30,10,10
  Selected font size = 40

Keyboard stimulator
  Filename = C:/Users/nekuss3/Desktop/Nueva carpeta/plugins/stimulation/simple-keyboard-to-stimulations.txt
-> P300 Speller Stimulator => #64
  Start stimulation = OVTK_StimulationId_Label_00
  Row stimulation base = OVTK_StimulationId_Label_01
  Column stimulation base = OVTK_StimulationId_Label_07
  Number of rows = 6
  Number of columns = 6
  Number of repetitions = 12
  Number of trials = 10
  Flash duration (in sec) = 0.200000
  No flash duration (in sec) = 0.100000
  Inter-repetition delay (in sec) = 1.000000
  Inter-trial delay (in sec) = 3.000000
  Avoid neighbor flashing = false
-> Target Letter Generation => #65
  Lua Script = C:/Users/nekuss3/Desktop/Nueva carpeta/bci-examples/p300-speller/p300-speller-target.lua
  Word to Spell (leave this empty if random) =
  Row Stimulation Base = OVTK_StimulationId_Label_01
  Column Stimulation Base = OVTK_StimulationId_Label_07
  Delay Before Sending (in sec) = 2
Acquisition client => #66
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Input stream 1=#66.Experiment information, Input stream 2=#66.Signal stream, Input stream 3=#64, Input stream 4=#65 -> Identity => #67
Input stream 1=#67.Output stream 1, Input stream 2=#67.Output stream 2, Input stream 3=#67.Output stream 3, Input stream 4=#67.Output stream 4 -> 0xc67a01dc Generic stream writer
  Filename = C:/Users/nekuss3/Desktop/Nueva carpeta/Garbage/file1-Javi-v2.ov
  Use compression = false
