OpenViBE-Scenario
0xf36a1567 = http://openvibe.inria.fr/openvibe-p300-speller/
Comment
  Python UI box frequency = 16Hz
  The script produces a new target every 200 calls (12.5s)
Comment
  Replace Generic stream reader with Acquisition Client
Comment
  This box will write the recorded file under
  the directory where the scenario was opened
  from (token ${Player_ScenarioDirectory})
Comment
  The use of these P300 examples are described in

  http://openvibe.inria.fr/openvibe-p300-speller/

  with important notes about timing in

  http://openvibe.inria.fr/using-the-p300-scenarios-inside-openvibe/

0xc67a01dc Python UI => #0
  Clock frequency (Hz) = 16
  Script = ${Player_ScenarioDirectory}/bciui_script_1_acquisition.py
  Message = Hello World!
#0.Controller -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
#0.Flash -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
Generic stream reader => #3
  Filename = ${Player_ScenarioDirectory}/signals/recorded_training_signal.ov
Input stream 1=#3.Output stream 2, Input stream 2=#0.Flash, Input stream 3=#0.Target -> Identity => #4
#4.Output stream 1 -> Channel Selector "O1;O2;P7;P8;F3;F4;FC5;FC6;AF3;AF4;F7;F8"
  Channel List = O1;O2;P7;P8;F3;F4;FC5;FC6;AF3;AF4;F7;F8
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 20.000000
  Pass band ripple (dB) = 0.500000
-> Signal Decimation => #7
  Decimation factor = 4
Input stream 1=#7, Input stream 2=#4.Output stream 2 -> Identity => #8
Data=#8.Output stream 1, Stimulations=#8.Output stream 2 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
Input stream 1=#3.Output stream 1, Input stream 2=#3.Output stream 2, Input stream 3=#0.Flash, Input stream 4=#0.Target -> Identity => #10
Input stream 1=#10.Output stream 1, Input stream 2=#10.Output stream 2, Input stream 3=#10.Output stream 3, Input stream 4=#10.Output stream 4 -> Generic stream writer
  Filename = C:/Users/Jun Shern/Desktop/PEARS/signals/train_record.ov
  Use compression = false
