OpenViBE-Scenario
0xf36a1567 = http://openvibe.inria.fr/openvibe-p300-speller/
Comment
  Note that by default this scenario reads from a file
  included in the OpenViBE distribution. To use
  real data, change Generic Stream Reader to
  read from the file recorded in the previous scenario,
  or switch from file reader to the acquisition client.

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Generic stream reader => #1
  Filename = ${Player_ScenarioDirectory}/signals/train_record.ov
Input stream 1=#0.Signal stream, Input stream 2=#1.Output stream 3, Input stream 3=#1.Output stream 4 -> Identity => #2
#2.Output stream 1 -> Channel Selector "O1;O2;P7;P8;F3;F4;FC5;FC6;AF3;AF4;F7;F8"
  Channel List = O1;O2;P7;P8;F3;F4;FC5;FC6;AF3;AF4;F7;F8
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 20.000000
  Pass band ripple (dB) = 0.500000
-> Signal Decimation
  Decimation factor = 4
-> 0xc67a01dc xDAWN Spatial Filter => #6
  Spatial Filter Coefficients = -4.561059e-001 6.600690e-003 -2.877068e-001 -1.030343e-001 3.764268e-001 2.969743e-001 -4.666909e-001 1.333307e-001 3.347113e-002 1.448744e-001 4.029376e-001 2.204463e-001 -3.948135e-001 -2.762787e-003 1.403193e-001 2.897733e-002 -6.222466e-001 -2.090764e-001 3.522058e-001 -9.960244e-002 -1.058103e-001 1.566382e-001 -7.668712e-002 4.659398e-001 1.823550e-001 8.497213e-003 7.280733e-002 7.531947e-002 -3.729480e-001 3.718229e-001 -6.167203e-002 -1.666482e-001 -1.449346e-001 6.106554e-001 -4.898763e-001 1.135701e-001
  Number of Output Channels = 3
  Number of Input Channels = 12
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/config/spatial.cfg
Input stream 1=#6, Input stream 2=#2.Output stream 2 -> Identity => #7
Input stream 1=#7.Output stream 1, Input stream 2=#7.Output stream 2 -> Identity => #8
Input signal=#8.Output stream 1, Input stimulations=#8.Output stream 2 -> Stimulation based epoching => #9
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_07
#9.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/dep_files/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #12
  Filename to load configuration from = ${Player_ScenarioDirectory}/config/classifier.xml
Input signal=#8.Output stream 1, Input stimulations=#8.Output stream 2 -> Stimulation based epoching => #13
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_08
#13.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/dep_files/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #16
  Filename to load configuration from = ${Player_ScenarioDirectory}/config/classifier.xml
Input signal=#8.Output stream 1, Input stimulations=#8.Output stream 2 -> Stimulation based epoching => #17
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_09
#17.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/dep_files/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #20
  Filename to load configuration from = ${Player_ScenarioDirectory}/config/classifier.xml
Input signal=#8.Output stream 1, Input stimulations=#8.Output stream 2 -> Stimulation based epoching => #21
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_0A
#21.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/dep_files/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #24
  Filename to load configuration from = ${Player_ScenarioDirectory}/config/classifier.xml
Input signal=#8.Output stream 1, Input stimulations=#8.Output stream 2 -> Stimulation based epoching => #25
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_0B
#25.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/dep_files/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #28
  Filename to load configuration from = ${Player_ScenarioDirectory}/config/classifier.xml
Input signal=#8.Output stream 1, Input stimulations=#8.Output stream 2 -> Stimulation based epoching => #29
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_0C
#29.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/dep_files/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #32
  Filename to load configuration from = ${Player_ScenarioDirectory}/config/classifier.xml
Input stream 1=#12.Hyperplane distance, Input stream 2=#16.Hyperplane distance, Input stream 3=#20.Hyperplane distance, Input stream 4=#24.Hyperplane distance, Input stream 5=#28.Hyperplane distance, Input stream 6=#32.Hyperplane distance -> Identity => #33
Classification result 0=#33.Output stream 1, Classification result 1=#33.Output stream 2, Classification result 2=#33.Output stream 3, Classification result 3=#33.Output stream 4, Classification result 4=#33.Output stream 5, Classification result 5=#33.Output stream 6 -> Voting Classifier => #34
  Number of repetitions = 8
  Target class label = OVTK_StimulationId_Target
  Non target class label = OVTK_StimulationId_NonTarget
  Reject class label = OVTK_StimulationId_Label_00
  Result class label base = OVTK_StimulationId_Label_07
  Choose one if ex-aequo = true
Input stream 1=#7.Output stream 1, Input stream 2=#7.Output stream 2 -> Identity => #35
Input signal=#35.Output stream 1, Input stimulations=#35.Output stream 2 -> Stimulation based epoching => #36
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_01
#36.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/dep_files/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #39
  Filename to load configuration from = ${Player_ScenarioDirectory}/config/classifier.xml
Input signal=#35.Output stream 1, Input stimulations=#35.Output stream 2 -> Stimulation based epoching => #40
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_02
#40.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/dep_files/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #43
  Filename to load configuration from = ${Player_ScenarioDirectory}/config/classifier.xml
Input signal=#35.Output stream 1, Input stimulations=#35.Output stream 2 -> Stimulation based epoching => #44
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_03
#44.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/dep_files/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #47
  Filename to load configuration from = ${Player_ScenarioDirectory}/config/classifier.xml
Input signal=#35.Output stream 1, Input stimulations=#35.Output stream 2 -> Stimulation based epoching => #48
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_04
#48.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/dep_files/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #51
  Filename to load configuration from = ${Player_ScenarioDirectory}/config/classifier.xml
Input signal=#35.Output stream 1, Input stimulations=#35.Output stream 2 -> Stimulation based epoching => #52
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_05
#52.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/dep_files/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #55
  Filename to load configuration from = ${Player_ScenarioDirectory}/config/classifier.xml
Input signal=#35.Output stream 1, Input stimulations=#35.Output stream 2 -> Stimulation based epoching => #56
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_06
#56.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/dep_files/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #59
  Filename to load configuration from = ${Player_ScenarioDirectory}/config/classifier.xml
Input stream 1=#39.Hyperplane distance, Input stream 2=#43.Hyperplane distance, Input stream 3=#47.Hyperplane distance, Input stream 4=#51.Hyperplane distance, Input stream 5=#55.Hyperplane distance, Input stream 6=#59.Hyperplane distance -> Identity => #60
Classification result 0=#60.Output stream 1, Classification result 1=#60.Output stream 2, Classification result 2=#60.Output stream 3, Classification result 3=#60.Output stream 4, Classification result 4=#60.Output stream 5, Classification result 5=#60.Output stream 6 -> Voting Classifier => #61
  Number of repetitions = 8
  Target class label = OVTK_StimulationId_Target
  Non target class label = OVTK_StimulationId_NonTarget
  Reject class label = OVTK_StimulationId_Label_00
  Result class label base = OVTK_StimulationId_Label_01
  Choose one if ex-aequo = true
Input stream 2=#61, Input stream 3=#34 -> Identity => #62
Flashes=#1.Output stream 3, Target=#1.Output stream 4, Row Selection=#62.Output stream 2, Column Selection=#62.Output stream 3 -> Python Visualizer => #63
  Clock frequency (Hz) = 1
  Script = ${Player_ScenarioDirectory}/bciui_script_3_online.py
-> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
#63 -> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Forward
#63 -> Player Controller
  Stimulation name = OVTK_StimulationId_Label_01
  Action to perform = Play
#1.Output stream 3 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop

Stimulation listener
  Log level to use = Information

Stimulation listener
  Log level to use = Information

Stimulation listener
  Log level to use = Information
