OpenViBE-Scenario

Generic stream reader => #0
  Filename = ${Player_ScenarioDirectory}/signals/train_record.ov
#0.Output stream 2 -> Channel Selector "O1;O2;P7;P8;F3;F4;FC5;FC6;AF3;AF4;F7;F8"
  Channel List = O1;O2;P7;P8;F3;F4;FC5;FC6;AF3;AF4;F7;F8
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 20.000000
  Pass band ripple (dB) = 0.500000
-> Signal Decimation
  Decimation factor = 4
-> xDAWN Spatial Filter => #4
  Spatial Filter Coefficients = -3.200711e-001 -2.725897e-001 -3.470047e-002 -9.096442e-002 -3.802317e-002 -2.934735e-001 3.798336e-001 6.753647e-001 -2.873165e-001 -2.072520e-001 -1.728345e-002 2.086335e-003 -3.515357e-001 2.150641e-002 4.172855e-003 2.117066e-001 3.303598e-002 4.251355e-001 6.757773e-001 -2.136506e-001 -1.625053e-001 -1.406761e-001 2.181541e-001 2.306100e-001 3.785803e-002 2.334681e-001 7.896158e-002 -6.003981e-001 -3.054393e-002 5.671585e-001 -1.794324e-001 3.309046e-001 -2.379914e-001 -2.369723e-001 1.596242e-002 -7.743452e-004
  Number of Output Channels = 3
  Number of Input Channels = 12
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/config/spatial.cfg
Input stream 3=#0.Output stream 3, Input stream 4=#0.Output stream 4 -> Identity => #5
Flashes=#5.Output stream 3, Target=#5.Output stream 4 -> Python Box (Target/Non-target) => #6
  Clock frequency (Hz) = 1
  Script = ${Player_ScenarioDirectory}/bciui_script_2_target_nontarget.py
Input signal=#4, Input stimulations=#6 -> Stimulation based epoching => #7
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
#7.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
-> Feature aggregator => #9
Input signal=#4, Input stimulations=#6 -> Stimulation based epoching => #10
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_NonTarget
#10.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
-> Feature aggregator => #12
Stimulations=#0.Output stream 3, Features for class 1=#9, Features for class 2=#12 -> Classifier trainer
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${Player_ScenarioDirectory}/config/classifier.xml
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 12
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop

Stimulation listener
  Log level to use = Information

Stimulation listener
  Log level to use = Information
