OpenViBE-Scenario
0xf36a1567 = http://openvibe.inria.fr/openvibe-p300-speller/

0xc67a01dc Python UI => #0
  Clock frequency (Hz) = 14
  Script = C:/Users/AARON/Dropbox/EE2 BCI Project/User Interface/bciuiv10/bciuiv10-acquisition.py
  Message = Hello World!
#0.Controller -> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop
Acquisition client => #2
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Input stream 1=#2.Signal stream, Input stream 2=#0.Flash, Input stream 3=#0.Target -> Identity => #3
#3.Output stream 1 -> Channel Selector "O1;O2;P7;P8;F3;F4;FC5;FC6;AF3; AF4; F7;F8"
  Channel List = O1;O2;P7;P8;F3;F4;FC5;FC6;AF3; AF4; F7;F8
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 20.000000
  Pass band ripple (dB) = 0.500000
-> Signal Decimation => #6
  Decimation factor = 4
Input stream 1=#6, Input stream 2=#3.Output stream 2 -> Identity => #7
Data=#7.Output stream 1, Stimulations=#7.Output stream 2 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
Input stream 1=#2.Experiment information, Input stream 2=#2.Signal stream, Input stream 3=#0.Flash, Input stream 4=#0.Target -> Identity => #9
Input stream 1=#9.Output stream 1, Input stream 2=#9.Output stream 2, Input stream 3=#9.Output stream 3, Input stream 4=#9.Output stream 4 -> Generic stream writer
  Filename = C:/Users/AARON/Desktop/Signals For Presentation/Javi/Nico-Online-clench.ov
  Use compression = false
