OpenViBE-Scenario
Comment
  Clock frequency is arbitrarily set to 1Hz;
  does not matter because it is run at every new
  stimulation at its input.

Generic stream reader => #0
  Filename = C:/Users/AARON/Desktop/Signals For Presentation/Javi/BCI-Javi-Training-F14v2.ov
#0.Output stream 2 -> Channel Selector "O1;O2;P7;P8;F3;F4;FC5;FC6;AF3; AF4; F7;F8"
  Channel List = O1;O2;P7;P8;F3;F4;FC5;FC6;AF3; AF4; F7;F8
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 20.000000
  Pass band ripple (dB) = 0.500000
-> Signal Decimation
  Decimation factor = 4
-> Time based epoching => #4
  Epoch 1 duration (in sec) = 0.250000
  Epoch 1 intervals (in sec) = 0.250000
Flashes=#0.Output stream 3, Target=#0.Output stream 4 -> Python Box (Target/Non-target) => #5
  Clock frequency (Hz) = 12
  Script = ${Player_ScenarioDirectory}/bciui_script_2_target_nontarget.py
-> Stimulation listener
  Log level to use = Information
Input signal=#4, Input stimulations=#5 -> Stimulation based epoching "Target Selection" => #7
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
Timeout => #8
  Timeout delay = 135
  Output Stimulation = OVTK_StimulationId_ExperimentStop
Stimulations=#8, Session signal=#4, Evoked potential epochs=#7.Epoched signal -> 0xc67a01dc xDAWN Spatial Filter Trainer
  Train stimulation = OVTK_StimulationId_ExperimentStop
  Spatial filter configuration = C:/Users/AARON/Desktop/Signals For Presentation/Javi/BCI-SpatialFilterConfig-F14v2.cfg
  Filter dimension = 3
  Save as box config = true
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Pause
