OpenViBE-Scenario

Generic stream reader => #0
  Filename = C:/Users/AARON/Desktop/Signals For Presentation/Javi/BCI-Javi-Training-F14v2.ov
#0.Output stream 2 -> Channel Selector "O1;O2;P7;P8;F3;F4;FC5;FC6;AF3; AF4; F7;F8"
  Channel List = O1;O2;P7;P8;F3;F4;FC5;FC6;AF3; AF4; F7;F8
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 20.000000
  Pass band ripple (dB) = 0.500000
-> Signal Decimation
  Decimation factor = 4
-> xDAWN Spatial Filter => #4
  Spatial Filter Coefficients = 6.623973e-002 -4.456837e-003 2.198404e-002 2.162993e-001 -4.686024e-002 4.192292e-002 -2.512326e-001 -7.651650e-001 3.310822e-001 4.304583e-001 8.591267e-003 2.813385e-002 2.180087e-001 4.495898e-002 9.222814e-003 -1.327840e-001 -8.131337e-002 -6.279998e-001 -2.817071e-001 3.705312e-001 5.508561e-001 -6.382723e-002 8.642861e-002 1.000084e-002 -1.441645e-001 -3.531532e-002 4.884595e-002 6.531454e-002 2.255879e-001 -7.201354e-001 3.150216e-001 1.263574e-001 -2.879211e-001 4.487342e-001 4.852248e-002 3.512582e-003
  Number of Output Channels = 3
  Number of Input Channels = 12
  Filter matrix file =
  0x8d21ff41 = C:/Users/AARON/Desktop/Signals For Presentation/Javi/BCI-SpatialFilterConfig-F14v2.cfg
Input stream 3=#0.Output stream 3, Input stream 4=#0.Output stream 4 -> Identity => #5
#5.Output stream 3 -> Stimulation listener
  Log level to use = Information
#5.Output stream 4 -> Stimulation listener
  Log level to use = Information
Flashes=#5.Output stream 3, Target=#5.Output stream 4 -> Python Box (Target/Non-target) => #8
  Clock frequency (Hz) = 1
  Script = ${Player_ScenarioDirectory}/bciui_script_2_target_nontarget.py
Input signal=#4, Input stimulations=#8 -> Stimulation based epoching => #9
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
Data=#9.Epoched signal, Stimulations=#0.Output stream 3 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
#9.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
-> Feature aggregator => #12
Input signal=#4, Input stimulations=#8 -> Stimulation based epoching => #13
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_NonTarget
#13.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
-> Feature aggregator => #15
Timeout => #16
  Timeout delay = 135
  Output Stimulation = OVTK_StimulationId_Train
Stimulations=#16, Features for class 1=#12, Features for class 2=#15 -> 0xc67a01dc Classifier trainer
  Train trigger = OVTK_StimulationId_Train
  Filename to save configuration to = C:/Users/AARON/Desktop/Signals For Presentation/Javi/BCI-Classifier-F14v2.xml
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 12
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
