OpenViBE-Scenario

Generic stream reader => #0
  Filename = D:/Github/BCI/BCI/User Interface/bciuiv9/EEG-Javi-Training.ov
#0.Output stream 2 -> Channel Selector "O1;O2;P7;P8;F3;F4;FC5;FC6;AF3; AF4; F7;F8"
  Channel List = O1;O2;P7;P8;F3;F4;FC5;FC6;AF3; AF4; F7;F8
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 20.000000
  Pass band ripple (dB) = 0.500000
-> Signal Decimation
  Decimation factor = 4
-> Time based epoching => #4
  Epoch 1 duration (in sec) = 0.250000
  Epoch 1 intervals (in sec) = 0.250000
Python UI => #5
  Clock frequency (Hz) = 32
  Script = D:/Github/BCI/BCI/User Interface/bciuiv9/bciuiv9-trainer.py
  Message = Hello World!
Input signal=#4, Input stimulations=#5 -> Stimulation based epoching "Target Selection" => #6
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
Timeout => #7
  Timeout delay = 1200
  Output Stimulation = OVTK_StimulationId_ExperimentStop
Stimulations=#7, Session signal=#4, Evoked potential epochs=#6.Epoched signal -> xDAWN Spatial Filter Trainer
  Train stimulation = OVTK_StimulationId_ExperimentStop
  Spatial filter configuration = D:/Github/BCI/BCI/User Interface/bciuiv9/Javi-Spatial-Filter-Config-v2.cfg
  Filter dimension = 3
  Save as box config = true
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Pause
