OpenViBE-Scenario
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  Note that by default this scenario reads from a file
  included in the OpenViBE distribution. To use
  real data, change Generic Stream Reader to
  read from the file recorded in the previous scenario.

Generic stream reader => #0
  Filename = C:/Users/Aaron/Dropbox/EE2 BCI Project/Scenarios/UI_test_scenario/EEG-Javi-Training.ov
#0.Output stream 2 -> Channel Selector "O1;O2;P7;P8;F3;F4;FC5;FC6;AF3; AF4; F7;F8"
  Channel List = O1;O2;P7;P8;F3;F4;FC5;FC6;AF3; AF4; F7;F8
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 20.000000
  Pass band ripple (dB) = 0.500000
-> Signal Decimation
  Decimation factor = 4
-> xDAWN Spatial Filter => #4
  Spatial Filter Coefficients = -4.192811e-001 7.454757e-003 -3.018151e-001 -9.793504e-002 4.021952e-001 2.891119e-001 -4.700483e-001 1.217886e-001 3.317560e-002 1.373854e-001 4.241580e-001 2.060443e-001 -4.073798e-001 -2.800870e-003 1.315449e-001 3.240172e-002 -6.283996e-001 -1.976131e-001 3.487842e-001 -8.699318e-002 -1.078551e-001 1.686907e-001 -6.885163e-002 4.557356e-001 1.962484e-001 9.969176e-003 7.869604e-002 7.316900e-002 -3.792320e-001 3.724776e-001 -6.192647e-002 -1.827146e-001 -1.362792e-001 6.104444e-001 -4.755118e-001 1.128652e-001
  Number of Output Channels = 3
  Number of Input Channels = 12
  Filter matrix file =
  0x8d21ff41 = C:/Users/Aaron/Dropbox/EE2 BCI Project/Scenarios/UI_test_scenario/Javi-Spatial-Filter-Config-v2.cfg
Generic stream reader => #5
  Filename = C:/Users/Aaron/Dropbox/EE2 BCI Project/Scenarios/UI_test_scenario/signals/bci-p300-speller.ov
Sequence stimulations=#5.Output stream 3, Target stimulations=#5.Output stream 4 -> P300 Speller Visualisation => #6
  Interface filename = C:/Users/Aaron/Dropbox/EE2 BCI Project/Scenarios/UI_test_scenario/plugins/simple-visualisation/p300-speller.ui
  Row stimulation base = OVTK_StimulationId_Label_01
  Column stimulation base = OVTK_StimulationId_Label_07
  Flash background color = 5,5,5
  Flash foreground color = 100,100,100
  Flash font size = 60
  No flash background color = 0,0,0
  No flash foreground color = 25,25,25
  No flash font size = 40
  Target background color = 10,40,10
  Target foreground color = 60,100,60
  Target font size = 40
  Selected background color = 70,20,20
  Selected foreground color = 30,10,10
  Selected font size = 40
Input signal=#4, Input stimulations=#6 -> Stimulation based epoching => #7
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
Data=#7.Epoched signal, Stimulations=#0.Output stream 3 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
#7.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
-> Feature aggregator => #10
Input signal=#4, Input stimulations=#6 -> Stimulation based epoching => #11
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_NonTarget
#11.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
-> Feature aggregator => #13
Timeout => #14
  Timeout delay = 1200
  Output Stimulation = OVTK_StimulationId_Train
Stimulations=#14, Features for class 1=#10, Features for class 2=#13 -> Classifier trainer
  Train trigger = OVTK_StimulationId_Train
  Filename to save configuration to = C:/Users/Aaron/Dropbox/EE2 BCI Project/Scenarios/UI_test_scenario/nueva_configa.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 12
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
