OpenViBE-Scenario
Comment
  This scenario is an example of
  how to convert files between formats.

  Conversion may not work correctly for all
  possible input and output combinations.

  You may have to customize the scenario
  to your particular case.

  If you run this scenario manually from Designer,
  please configure the input and output filenames
  of the reader and writer boxes.

  Script 'openvibe-convert' relies on this scenario.

Generic stream reader => #0
  Filename = C:/Users/Jun Shern/Scripts/BCI/BCI/User Interface/signals/BCI-Javi-Training-F12.ov
#0.Output stream 2 -> Timeout
  Timeout delay = 1
  Output Stimulation = OVTK_StimulationId_Label_00
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop
#0.Output stream 2 -> CSV File Writer
  Filename = C:/Users/Jun Shern/Scripts/BCI/BCI/User Interface/signals/BCI-Javi-Training-F12_signal.ov
  Column separator = ,
  Precision = 10
#0.Output stream 3 -> CSV File Writer
  Filename = C:/Users/Jun Shern/Scripts/BCI/BCI/User Interface/signals/BCI-Javi-Training-F12_flashes.ov
  Column separator = ,
  Precision = 10
#0.Output stream 4 -> 0xc67a01dc CSV File Writer
  Filename = C:/Users/Jun Shern/Scripts/BCI/BCI/User Interface/signals/BCI-Javi-Training-F12_target.ov
  Column separator = ,
  Precision = 10
